OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Classifier Training
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

Generic stream reader => #0
  Filename = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/Data/0-Move Arm/trial-2019-03-15-1.ov
Input stream 1=#0.Output stream 2, Input stream 2=#0.Output stream 3 -> Identity => #1
#1.Output stream 1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 8
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #3
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/1-Fingers/4-8Hz.cfg
#1.Output stream 1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #5
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/1-Fingers/8-12Hz.cfg
#1.Output stream 1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 16
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #7
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/1-Fingers/12-16Hz.cfg
#1.Output stream 1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 16
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #9
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/1-Fingers/16-20Hz.cfg
#1.Output stream 1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 20
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #11
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/1-Fingers/20-25Hz.cfg
#1.Output stream 1 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 25
  High cut frequency (Hz) = 38
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #13
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/1-Fingers/25-38Hz.cfg
Input 1=#3, Input 2=#5, Input 3=#7, Input 4=#9, Input 5=#11, Input 6=#13 -> Signal Merger => #14
Input signal=#14, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Left trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Left
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #20
Input signal=#14, Input stimulations=#1.Output stream 2 -> Stimulation based epoching "Right trials"
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_GDF_Right
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #26
Stimulations=#1.Output stream 2, Features for class 1=#20, Features for class 2=#26 -> Classifier trainer
  Train trigger = OVTK_StimulationId_Train
  Filename to save configuration to = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/2-Classifier Trainer/1-Fingers/classifier-alpha-beta.cfg
  Multiclass strategy to apply = Native
  Class 1 label = OVTK_GDF_Left
  Class 2 label = OVTK_GDF_Right
  Algorithm to use = Linear Discrimimant Analysis (LDA)
  Use shrinkage = false
  Shrinkage coefficient (-1 == auto) = -1.000000
  Shrinkage: Force diagonal cov (DDA) = false
  Number of partitions for k-fold cross-validation test = 5
  Balance classes = false
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
