OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renard / Fabien Lotte
0x9f5c4075 = Online Use
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Input stream 1=#0.Signal stream, Input stream 2=#0.Stimulations, Input stream 3=#0.Experiment information -> Identity => #1
Input stream 1=#1.Output stream 3, Input stream 2=#1.Output stream 1, Input stream 3=#1.Output stream 2 -> Generic stream writer
  Filename = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/Data/trial-2019-03-23-1-motor-imagery-csp-4-online-alpha-beta-[$core{date}-$core{time}].ov
  Use compression = false
#1.Output stream 1 -> Channel Selector "1:16" => #3
  Channel List = 1:16
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 16
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #5
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/2-Thoughts/16-20Hz.cfg
#3 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 20
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #7
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/2-Thoughts/20-25Hz.cfg
#3 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 25
  High cut frequency (Hz) = 38
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #9
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/2-Thoughts/25-38Hz.cfg
#3 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 16
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #11
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/2-Thoughts/12-16Hz.cfg
#3 -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #13
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/2-Thoughts/8-12Hz.cfg
Input 1=#13, Input 2=#11, Input 3=#5, Input 4=#7, Input 5=#9 -> Signal Merger
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #19
Features=#19, Commands=#1.Output stream 2 -> Classifier processor => #20
  Filename to load configuration from = C:/Users/sagar/Google Drive/Sagar/HKU Courses/HKU Year 4/FYP/LexiCon/OpenVibe/Motor-Imagery/2-Classifier Trainer/trial-2019-03-27-1-motor-imagery-bci-config-classifier-alpha-beta.cfg
#20.Probability values -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Graz Motor Imagery BCI Stimulator => #22
  Lua Script = C:/Program Files (x86)/openvibe-2.2.0/share/openvibe/scenarios/bci-examples/motor-imagery-CSP/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_GDF_Left
  Second Class = OVTK_GDF_Right
  Baseline Duration (in sec) = 20
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 4.250000
  Feedback Duration (in sec) = 8.750000
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Stimulations=#22, Amplitude=#20.Probability values -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
