OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
0x790d75b8 = Yann Renad / Fabien Lotte
0x9f5c4075 = File Replay
0xf6b2e3fa = Motor Imagery
0xf8034a49 = INRIA

Generic stream reader => #0
  Filename = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/Data/Test/0 - Move Arm/trial-2019-03-15-1-motor-imagery-csp-4-online-alpha-beta-[2019.03.15-23.52.23].ov
#0.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_EndOfFile
  Action to perform = Pause
#0.Output stream 2 -> Channel Selector "1:16" => #2
  Channel List = 1:16
  Action = Select
  Channel Matching Method = Smart
#0.Output stream 3 -> Switch director => #3
  Lua Script = C:/Program Files/openvibe-2.2.0-64bit/share/openvibe/scenarios/bci-examples/motor-imagery-CSP/motor-imagery-bci-epoch-selector.lua
  offset = 0.5
  duration = 4.0
Triggers=#3, Matrix=#2 -> Stream Switch => #4
  Default to output 1 = false
  Switch stim for output 1 = OVTK_GDF_Correct
  Switch stim for output 2 = OVTK_GDF_Incorrect
#4.Output -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 4
  High cut frequency (Hz) = 8
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #6
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/1-Fingers/4-8Hz.cfg
#4.Output -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 16
  High cut frequency (Hz) = 20
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #8
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/1-Fingers/16-20Hz.cfg
#4.Output -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 20
  High cut frequency (Hz) = 25
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #10
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/1-Fingers/20-25Hz.cfg
#4.Output -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 25
  High cut frequency (Hz) = 38
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #12
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/1-Fingers/25-38Hz.cfg
#4.Output -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 12
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #14
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/1-Fingers/8-12Hz.cfg
#4.Output -> Temporal filter
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 12
  High cut frequency (Hz) = 16
  Pass band ripple (dB) = 1
-> CSP Spatial Filter => #16
  Spatial Filter Coefficients = -1.025592e-001 -7.992702e-002 -3.380574e-002 -9.564073e-002 1.014601e-001 -1.039170e-001 8.733368e-002 -3.739840e-002 -2.037134e-001 7.071647e-001 3.741635e-001 -3.580719e-001 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1.384452e-001
  Number of Output Channels = 6
  Number of Input Channels = 16
  Filter matrix file =
  0x8d21ff41 = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/1-CSP Filter Trainer/1-Fingers/12-16Hz.cfg
Input 1=#6, Input 2=#14, Input 3=#16, Input 4=#8, Input 5=#10, Input 6=#12 -> Signal Merger
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator => #22
Input stream 2=#0.Output stream 3 -> Identity => #23
Features=#22, Commands=#23.Output stream 2 -> Classifier processor => #24
  Filename to load configuration from = C:/Users/ajay/Documents/LexiCon/OpenVibe/Motor-Imagery/2-Classifier Trainer/1-Fingers/classifier-alpha-beta.cfg
Stimulations=#23.Output stream 2, Amplitude=#24.Hyperplane distance -> Graz visualization
  Show instruction = true
  Show feedback = true
  Delay feedback = false
  Show accuracy = false
  Predictions to integrate = 5
  Positive feedback only = false
#23.Output stream 2 -> Stimulation Filter => #26
  Default action = Reject
  Time range begin = 0
  Time range end = 0
  Action to perform = Select
  Stimulation range begin = OVTK_GDF_Left
  Stimulation range end = OVTK_GDF_Left
  Action to perform(1) = Select
  Stimulation range begin(1) = OVTK_GDF_Right
  Stimulation range end(1) = OVTK_GDF_Right
Targets=#26, Classification results=#24.Labels -> Confusion Matrix
  Percentages = true
  Sums = false
  Class 1 = OVTK_GDF_Left
  Class 2 = OVTK_GDF_Right
-> Matrix Display "Confusion Matrix"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Targets=#26, LDA=#24.Labels -> Accuracy Measure
