OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=2.2.0)
Comment
  This scenario allows to visualize the signal coming from eeg cap through the acquisition server.

  For the experiment, FCz, C1, Cz, C2 and CPz are used
Comment
  Use Generic stream reader
  instead of Acquisition client
  to replay recorded signals

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:16" => #1
  Channel List = 1:16
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Filter Coefficients = 1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;1;
  Number of Output Channels = 1
  Number of Input Channels = 16
  Filter matrix file =
#1 -> Temporal Filter => #3
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
-> Simple DSP "Band Power"
  Equation = x*x
-> Signal average
Data=#3 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
